CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\\\\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\\\\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Nuc_Parast
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:HCSCellMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Nuc_Parast
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):18,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:8|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:Nuc_Parast
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:9|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
    Name the output objects:FilteredNuc
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:FilteredNuc
    Name the objects to be identified:NucExp
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuc_Parast
    Number of pixels by which to expand the primary objects:4
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:NucExp
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:HCSCellMask
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredCells
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:NucExp
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:Nuc_Parast
    Name the primary objects to be identified:Parasites
    Typical diameter of objects, in pixel units (Min,Max):4,12
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:ParasitesOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:14|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
    Select objects to be masked:Parasites
    Name the masked objects:MaskedParasites
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

RelateObjects:[module_num:15|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
    Select the input child objects:MaskedParasites
    Select the input parent objects:Cytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:Yes
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    Name the output image:FinalOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cytoplasm
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredNuc
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:NucExp
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedParasites

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:FinalOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuc_Parast
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder|Z:\\\\\\\\Gina Alves\\\\\\\\Teste CellProfiler\\\\\\\\TesteV02
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Children_MaskedParasites_Count
    Select the image on which to display the measurements:FinalOverlay
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuc_Parast
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:data
    Saved file format:tif
    Output file location:Default Output Folder|Z:\\\\\\\\Gina Alves\\\\\\\\Teste CellProfiler\\\\\\\\TesteV02
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayPlatemap:[module_num:20|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
    Display object or image measurements?:Object
    Select the object whose measurements will be displayed:Cytoplasm
    Select the measurement to plot:Children_MaskedParasites_Count
    Select your plate metadata:Metadata_Frame
    Multiwell plate format:96
    Select your well metadata:Metadata_Well
    Select your well row metadata:Metadata_WellRow
    Select your well column metadata:Metadata_WellCol
    How should the values be aggregated?:avg
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    Well metadata format:Well name

ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Z:\\\\\\\\Gina Alves\\\\\\\\Teste CellProfiler\\\\\\\\TesteV02
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :MaskedParasites|Number_Object_Number,MaskedParasites|Parent_Cytoplasm,MaskedParasites|Parent_Parasites,MaskedParasites|Location_Center_Y,MaskedParasites|Location_Center_X,Cytoplasm|Children_MaskedParasites_Count,Cytoplasm|Number_Object_Number,Cytoplasm|Parent_NucExp,Cytoplasm|Parent_Cells,Cytoplasm|Location_Center_Y,Cytoplasm|Location_Center_X,Image|Count_FilteredCells,Image|Count_MaskedParasites,Image|Count_Cytoplasm,Image|Count_Cells,Image|Count_FilteredNuc,Image|Count_Parasites,Image|Count_NucExp,Image|Count_Nuclei,Image|Group_Index,Image|Group_Number,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
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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